CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:FGF_001nM_3
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:6|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
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/HRB/FGF_Oligomer_Paper/Calcium_Release/results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Intensity_StdIntensity_FGF_001nM_3,Cells|Intensity_MassDisplacement_FGF_001nM_3,Cells|Intensity_MedianIntensity_FGF_001nM_3,Cells|Intensity_MinIntensityEdge_FGF_001nM_3,Cells|Intensity_IntegratedIntensity_FGF_001nM_3,Cells|Intensity_UpperQuartileIntensity_FGF_001nM_3,Cells|Intensity_StdIntensityEdge_FGF_001nM_3,Cells|Intensity_MaxIntensityEdge_FGF_001nM_3,Cells|Intensity_MADIntensity_FGF_001nM_3,Cells|Intensity_LowerQuartileIntensity_FGF_001nM_3,Cells|Intensity_MaxIntensity_FGF_001nM_3,Cells|Intensity_MinIntensity_FGF_001nM_3,Cells|Intensity_IntegratedIntensityEdge_FGF_001nM_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FGF_001nM_3_
    Overwrite existing files without warning?:No
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